# Generated by Configurator on Wed May 14 21:29:11 CEST 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,openUC2-Hub,openUC2,openUC2-Hub
Device,openUC2-XYStage,openUC2,openUC2-XYStage
Device,openUC2-ZStage,openUC2,openUC2-ZStage
Device,openUC2-Laser1,openUC2,openUC2-Laser1
Device,openUC2-Laser2,openUC2,openUC2-Laser2
Device,openUC2-Laser3,openUC2,openUC2-Laser3
Device,openUC2-Laser4,openUC2,openUC2-Laser4
Device,DahengCamera,DahengGalaxy,DahengCamera

# Pre-init settings for devices
Property,openUC2-Hub,Port,COM5
Property,DahengCamera,SerialNumber,FCW23010067

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,115200
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1

# Hub (parent) references
Parent,openUC2-XYStage,openUC2-Hub
Parent,openUC2-ZStage,openUC2-Hub
Parent,openUC2-Laser1,openUC2-Hub
Parent,openUC2-Laser2,openUC2-Hub
Parent,openUC2-Laser3,openUC2-Hub
Parent,openUC2-Laser4,openUC2-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,openUC2-ZStage,0

# Roles
Property,Core,Camera,DahengCamera
Property,Core,Shutter,openUC2-Laser4
Property,Core,Focus,openUC2-ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

